OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)
Comment
  This scenario is an example of
  how to convert files between formats.

  Conversion may not work correctly for all
  possible input and output combinations.

  You may have to customize the scenario
  to your particular case.

  If you run this scenario manually from Designer,
  please configure the input and output filenames
  of the reader and writer boxes.

  Script 'openvibe-convert' relies on this scenario.

0x341d3912 Channel Rename
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8

Generic stream reader => #1
  Filename = C:/git/Senior_Thesis/DataSet/OpenTopic_dataset/promt/train_hand1
#1.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#1.Output stream 2 -> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #5
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
Experiment information=#1.Output stream 1, Signal=#5, Stimulations=#1.Output stream 3 -> EDF File Writer
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/class3_promt_edf.edf

Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0
  High Cut-off Frequency (Hz) = 50

Generic stream reader => #8
  Filename = C:/git/Senior_Thesis/DataSet/OpenTopic_dataset/por/train_hand1
#8.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#8.Output stream 2 -> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #12
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
Experiment information=#8.Output stream 1, Signal=#12, Stimulations=#8.Output stream 3 -> EDF File Writer
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/class3_por_edf.edf

Generic stream reader => #14
  Filename = C:/git/Senior_Thesis/DataSet/OpenTopic_dataset/jedi/train_hand1
#14.Output stream 2 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#14.Output stream 2 -> Channel Selector "EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8"
  Channel List = EEG1;EEG2;EEG3;EEG4;EEG5;EEG6;EEG7;EEG8
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #18
  New channel names = Fz;C3;Cz;C4;Pz;PO7;Oz;PO8
Experiment information=#14.Output stream 1, Signal=#18, Stimulations=#14.Output stream 3 -> EDF File Writer
  Filename = C:/git/Senior_Thesis/DataSet/Convert_data/class3_jedi_edf.edf
